PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Use version = 3.0.7
  Window size (pixels) = [1920, 1080]
  color = $[0.004,0.004,0.004]
  expName = experiment_final_0803
  logging level = error
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Routines
  Routine thanks
    TextComponent text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        you are all done!

        thank you for participating :)

        수고하셨습니다!

        참여해주셔서 감사합니다.
  Routine break_2
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        nblockText=''
      Begin Routine:
        nblock=block.thisRepN+1
        nblockText="You finished %d out of 10 blocks."%(nblock)
    TextComponent text_2
      color = black
      letterHeight = 0.035
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Take a break!

        Press the space bar when you are ready to start again!

        잠시 쉬어가세요!

        준비가 되셨을때 스페이스바를 눌러서 다시 실험으로 돌아가세요.
    TextComponent text_3
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $nblockText
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine color
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        SubPos = [0,0]
        Dist1Pos=[0,0]
        Dist2Pos=[0,0]
        Dist3Pos=[0,0]
        TargHolePos=[0,0]
        DistHole1Pos=[0,0]
        DistHole2Pos=[0,0]
        DistHole3Pos=[0,0]
        TargColor = ''
        Dist1Color = ''
        Dist2Color = ''
        Dist3Color = ''



        #color distribution
        color1 = [0.919328101270864,0.562714754347291,0.677880544326632] #pink
        color2 = [0.738273479967632,0.665884513139248,0.394944342687036] #blue
        color3 = [0.285277976226026,0.744574124644093,0.664931204138875] #yellow
        color4 = [0.532436017960231,0.678950350974952,0.941414538047463] #green

        leftUpPos = [-3, 3]
        leftDownPos = [-3, -3]
        rightUpPos = [3, 3]
        rightDownPos = [3, -3]

        def holeup(pos):
            pos1 = [0, 0]
            pos1[0] = pos[0]
            pos1[1] = pos[1]+0.5
            return pos1

        def holedown(pos):
            pos1 = [0, 0]
            pos1[0] = pos[0]
            pos1[1] = pos[1]-0.5
            return pos1

        def holeleft(pos):
            pos1 = [0,0]
            pos1[1] = pos[1]
            pos1[0] = pos[0] - 0.5
            return pos1


        def holeright(pos):
            pos1 = [0, 0]
            pos1[1] = pos[1]
            pos1[0] = pos[0] + 0.5
            return pos1
      Begin Routine:
        import numpy as np
        from numpy.random import random

        #threshold------------------------------------------
        value = (reversal_value[-8] + reversal_value[-7] + reversal_value[-6] + reversal_value[-5] + reversal_value[-4] + reversal_value[-3] + reversal_value[-2] + reversal_value[-1]) / 8

        #value = (thStore[-1] + thStore[-2] + thStore[-3] + thStore [-4])/4

        #---------------------------------position---------
        if cue == 'Valid':
            SubPos = TargPos
        elif cue == 'Invalid':
            SubPos = Dist1Pos

        if TargPos == [-3,3]:
            posLists = [leftDownPos, rightUpPos, rightDownPos]
            Pos = ['leftDownPos', 'rightUpPos', 'rightDownPos']
            StartIdx =  np.random.choice(Pos, 3, p=[0.34, 0.33, 0.33], replace = False)
            StartPos = []
            for idx in StartIdx:
                StartPos.append(posLists[Pos.index(idx)])
            Dist1Pos = StartPos[0]
            Dist2Pos = StartPos[1]
            Dist3Pos = StartPos[2]
            if random()>0.5:
                TargHolePos = holeleft(TargPos)
                np.random.shuffle(StartPos)
                DistHole1Pos = holedown(StartPos[0])
                DistHole2Pos = holeright(StartPos[1])
                DistHole3Pos = holeup(StartPos[2])
                corrAns = 'left'
            else:
                TargHolePos = holeright(TargPos)
                np.random.shuffle(StartPos)
                DistHole1Pos = holedown(StartPos[0])
                DistHole2Pos = holeleft(StartPos[1])
                DistHole3Pos = holeup(StartPos[2])
                corrAns = 'right'

        elif TargPos == [-3,-3]:
            posLists = [leftUpPos, rightUpPos, rightDownPos]
            Pos = ['leftUpPos', 'rightUpPos', 'rightDownPos']
            StartIdx =  np.random.choice(Pos, 3, p=[0.34, 0.33, 0.33], replace = False)
            StartPos = []
            for idx in StartIdx:
                StartPos.append(posLists[Pos.index(idx)])
            Dist1Pos = StartPos[0]
            Dist2Pos = StartPos[1]
            Dist3Pos = StartPos[2]
            if random()>0.5:
                TargHolePos = holeleft(TargPos)
                np.random.shuffle(StartPos)
                DistHole1Pos = holedown(StartPos[0])
                DistHole2Pos = holeright(StartPos[1])
                DistHole3Pos = holeup(StartPos[2])
                corrAns = 'left'
            else:
                TargHolePos = holeright(TargPos)
                np.random.shuffle(StartPos)
                DistHole1Pos = holedown(StartPos[0])
                DistHole2Pos = holeleft(StartPos[1])
                DistHole3Pos = holeup(StartPos[2])
                corrAns = 'right'


        elif TargPos == [3,3]:
            posLists = [leftUpPos, leftDownPos, rightDownPos]
            Pos = ['leftUpPos', 'leftDownPos', 'rightDownPos']
            StartIdx =  np.random.choice(Pos, 3, p=[0.34, 0.33, 0.33], replace = False)
            StartPos = []
            for idx in StartIdx:
                StartPos.append(posLists[Pos.index(idx)])
            Dist1Pos = StartPos[0]
            Dist2Pos = StartPos[1]
            Dist3Pos = StartPos[2]
            if random()>0.5:
                TargHolePos = holeleft(TargPos)
                np.random.shuffle(StartPos)
                DistHole1Pos = holedown(StartPos[0])
                DistHole2Pos = holeright(StartPos[1])
                DistHole3Pos = holeup(StartPos[2])
                corrAns = 'left'
            else:
                TargHolePos = holeright(TargPos)
                np.random.shuffle(StartPos)
                DistHole1Pos = holedown(StartPos[0])
                DistHole2Pos = holeleft(StartPos[1])
                DistHole3Pos = holeup(StartPos[2])
                corrAns = 'right'

        elif TargPos == [3,-3]:
            posLists = [leftUpPos, leftDownPos, rightUpPos]
            Pos = ['leftDownPos', 'rightUpPos', 'leftUpPos']
            StartIdx =  np.random.choice(Pos, 3, p=[0.34, 0.33, 0.33], replace = False)
            StartPos = []
            for idx in StartIdx:
                StartPos.append(posLists[Pos.index(idx)])
            Dist1Pos = StartPos[0]
            Dist2Pos = StartPos[1]
            Dist3Pos = StartPos[2]
            if random()>0.5:
                TargHolePos = holeleft(TargPos)
                np.random.shuffle(StartPos)
                DistHole1Pos = holedown(StartPos[0])
                DistHole2Pos = holeright(StartPos[1])
                DistHole3Pos = holeup(StartPos[2])
                corrAns = 'left'
            else:
                TargHolePos = holeright(TargPos)
                np.random.shuffle(StartPos)
                DistHole1Pos = holedown(StartPos[0])
                DistHole2Pos = holeleft(StartPos[1])
                DistHole3Pos = holeup(StartPos[2])
                corrAns = 'right'

        #-----------------color-------------------------------------------------------------#

        if TargColor == 'color1': #if target color is color1
            #distribute color randomly
        #    colorLists = [color2, color3, color4]
        #    color = ['color2', 'color3', 'color4']
        #    colorIdx = np.random.choice(color, 3, p=[0.34, 0.33, 0.33], replace = False)
        #    colorPos = []
        #    for idx in colorIdx:
        #        colorPos.append(colorLists[color.index(idx)])
            TargColor = color1
            Dist1Color = color2
            Dist2Color = color3
            Dist3Color = color4

        elif TargColor == 'color2': #if target color is color 2
            #distribute color randomly
         #   colorLists = [color1, color3, color4]
         #   color = ['color1', 'color3', 'color4']
         #   colorIdx = np.random.choice(color, 3, p=[0.34, 0.33, 0.33], replace = False)
         #   colorPos = []
         #   for idx in colorIdx:
          #      colorPos.append(colorLists[color.index(idx)])
            TargColor = color2
            Dist1Color = color1
            Dist2Color = color3
            Dist3Color = color4

        elif TargColor == 'color3':
            TargColor = color3
            Dist1Color = color1
            Dist2Color = color2
            Dist3Color = color4

        elif TargColor == 'color4':
            TargColor = color4
            Dist1Color = color1
            Dist2Color = color2
            Dist3Color = color3

        #---------------------------hole-------------------------
      End Routine:
        trials_2.addData('threshold', value)
        trials_2.addData('circle_start', circle1_2.tStart)
        trials_2.addData('sub_cue_start', sub_cue.tStart)
        trials_2.addData('mask_start', mask1.tStart)
        trials_2.addData('sub_cue_time', mask1.tStart - sub_cue.tStart)
        trials_2.addData('Subpos', SubPos)
    PolygonComponent polygon_2
      fillColor = $[-1.000,-1.000,-1.000]
      lineWidth = 0
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent target_red
      fillColor [set every repeat] = $TargColor
      lineWidth = 0
      nVertices = 90
      shape = regular polygon...
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      units = deg
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    PolygonComponent sub_cue
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $SubPos
      shape = regular polygon...
      size = (2,2)
      startVal [time (s)] = 1.5
      stopVal [duration (frames)] = $value
      units = deg
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    PolygonComponent mask1
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos = (-3,-3)
      shape = regular polygon...
      size = (2,2)
      startVal [condition] = $sub_cue.status == FINISHED
      stopVal [duration (s)] = 0.033
      units = deg
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    PolygonComponent mask2
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos = (-3, 3)
      shape = regular polygon...
      size = (2,2)
      startVal [condition] = $sub_cue.status == FINISHED
      stopVal [duration (s)] = 0.033
      units = deg
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    PolygonComponent mask1_3
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos = (3,-3)
      shape = regular polygon...
      size = (2,2)
      startVal [condition] = $sub_cue.status == FINISHED
      stopVal [duration (s)] = 0.033
      units = deg
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    PolygonComponent mask1_4
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos = (3,3)
      shape = regular polygon...
      size = (2,2)
      startVal [condition] = $sub_cue.status == FINISHED
      stopVal [duration (s)] = 0.033
      units = deg
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    PolygonComponent circle1_2
      fillColor [set every repeat] = $TargColor
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $TargPos
      shape = regular polygon...
      size = (2,2)
      startVal [condition] = $mask1.status == FINISHED
      stopVal [duration (s)] = 0.2
      units = deg
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    PolygonComponent circle2_2
      fillColor [set every repeat] = $Dist1Color
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $Dist1Pos
      shape = regular polygon...
      size = (2,2)
      startVal [condition] = $mask1.status == FINISHED
      stopVal [duration (s)] = 0.2
      units = deg
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    PolygonComponent circle3_2
      fillColor [set every repeat] = $Dist2Color
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $Dist2Pos
      shape = regular polygon...
      size = (2,2)
      startVal [condition] = $mask1.status == FINISHED
      stopVal [duration (s)] = 0.2
      units = deg
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    PolygonComponent circle4_2
      fillColor [set every repeat] = $Dist3Color
      lineColor [set every repeat] = $Dist3Color
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $Dist3Pos
      shape = regular polygon...
      size = (2,2)
      startVal [condition] = $mask1.status == FINISHED
      stopVal [duration (s)] = 0.2
      units = deg
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    PolygonComponent hole_1
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $TargHolePos
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [condition] = $mask1.status == FINISHED
      stopVal [duration (s)] = 0.2
      units = deg
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    PolygonComponent hole_2
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $DistHole1Pos
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [condition] = $mask1.status == FINISHED
      stopVal [duration (s)] = 0.2
      units = deg
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    PolygonComponent hole3
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $DistHole2Pos
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [condition] = $mask1.status == FINISHED
      stopVal [duration (s)] = 0.2
      units = deg
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    PolygonComponent hole_4
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $DistHole3Pos
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [condition] = $mask1.status == FINISHED
      stopVal [duration (s)] = 0.2
      units = deg
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    KeyboardComponent key_resp_3
      allowedKeys = 'right', 'left'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [condition] = $circle1_2.status == FINISHED
      storeCorrect = True
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  Routine staircase
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        thStore = []
        corrStore = []
        targLoc = [0,0]
        reversal = []
        threshold = ''
        reversal_value = []
      Begin Routine:
        import random
        import numpy as np


        win.mouseVisible = False

        #position

        leftUpPos = [-3, 3]
        leftDownPos = [-3, -3]
        rightUpPos = [3, 3]
        rightDownPos = [3, -3]

        #target circle selection(randomly out of 4)
        Position = ['leftUpPos', 'leftDownPos', 'rightUpPos', 'rightDownPos']
        Position1 = np.random.choice(Position, 4, p=[0.25, 0.25, 0.25, 0.25], replace = False)



        if Position1[0] == 'leftUpPos':
            targLoc = leftUpPos
            correctAns = 'f'
        elif Position1[0] == 'leftDownPos':
            targLoc = leftDownPos
            correctAns = 'v'
        elif Position1[0] == 'rightUpPos':
            targLoc = rightUpPos
            correctAns = 'j'
        elif Position1[0] == 'rightDownPos':
            targLoc = rightDownPos
            correctAns = 'n'
      End Routine:
        thStore.append(level)
        corrStore.append(key_resp_5.corr)
        subcue_t = mask1_2.tStart - sub_cue_2.tStart
        staircases.addOtherData('subcue_time', subcue_t)
        reversal = staircases.reversalPoints
        reversal_value = staircases.reversalIntensities

        if len(reversal) > 9:
            staircases.finished = True

        staircases.addOtherData('reversal', staircases.reversalPoints)
        staircases.addOtherData('reversal_value', reversal_value)
    PolygonComponent fixpoint
      fillColor = $[-1.000,-1.000,-1.000]
      lineWidth = 0
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent sub_cue_2
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $targLoc
      shape = regular polygon...
      size = [2, 2]
      startVal [time (s)] = 0.2
      stopVal [duration (frames)] = $level
      units = deg
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    PolygonComponent mask1_2
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos = [3, 3]
      shape = regular polygon...
      size = [2, 2]
      startVal [condition] = $sub_cue_2.status==FINISHED
      stopVal [duration (s)] = 0.033
      units = deg
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    PolygonComponent mask2_2
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos = [3,-3]
      shape = regular polygon...
      size = [2, 2]
      startVal [frame N] = $sub_cue_2.status==FINISHED
      stopVal [duration (s)] = 0.033
      units = deg
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    PolygonComponent mask2_3
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos = [-3,3]
      shape = regular polygon...
      size = [2, 2]
      startVal [frame N] = $sub_cue_2.status==FINISHED
      stopVal [duration (s)] = 0.033
      units = deg
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    PolygonComponent mask2_4
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos = [-3,-3]
      shape = regular polygon...
      size = [2, 2]
      startVal [frame N] = $sub_cue_2.status==FINISHED
      stopVal [duration (s)] = 0.033
      units = deg
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    KeyboardComponent key_resp_5
      allowedKeys = 'f','v','j','n'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = $mask1_2.status == FINISHED
      storeCorrect = True
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  Routine eye_fixation
    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        win.mouseVisible = True
        mousePos = mouse.getPos()
      Each Frame:
        if polygon_7.contains(mouse):
            core.wait(0.1)
            continueRoutine = False
      End Routine:
        win.mouseVisible = False
    PolygonComponent polygon
      fillColor = $[-1.000,-1.000,-1.000]
      lineWidth = 0
      shape = cross
      size = (1,1)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent polygon_7
      fillColor = $[0.004,0.004,0.004]
      lineWidth = 0
      nVertices = 90
      opacity = 0
      shape = regular polygon...
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = deg
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    MouseComponent mouse
      clickable = polygon
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine feedback_color
    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        if key_resp_3.corr:
            msg = '정답!'
        else :
            msg = '오답'
    TextComponent feedback_4
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
      text [set every repeat] = $msg
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  Routine Instruction_1
    CodeComponent code_10
      Code Type = Py
      Begin Experiment:
        win.mouseVisible = False
      Begin Routine:
        win.mouseVisible = False
    ImageComponent image
      image = inst1.png
      size = (40,24)
      startVal [time (s)] = 0.0
      units = deg
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction_2
    ImageComponent image_2
      image = inst1_2.png
      size = (40,24)
      startVal [time (s)] = 0.0
      units = deg
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine start
    PolygonComponent fixpoint_2
      fillColor = $[-1.000,-1.000,-1.000]
      lineWidth = 0
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = deg
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    CodeComponent code_11
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine staircase_tutorial
    CodeComponent code_5
      Code Type = Py
      Begin Experiment:
        thStore = []
        corrStore = []
        targLoc = [0,0]
        movingaccu = ''
      Begin Routine:
        import random
        import numpy as np

        win.mouseVisible = False


        #position

        leftUpPos = [-3, 3]
        leftDownPos = [-3, -3]
        rightUpPos = [3, 3]
        rightDownPos = [3, -3]

        #target circle selection(randomly out of 4)
        Position = ['leftUpPos', 'leftDownPos', 'rightUpPos', 'rightDownPos']
        Position1 = np.random.choice(Position, 4, p=[0.25, 0.25, 0.25, 0.25], replace = False)



        if Position1[0] == 'leftUpPos':
            targLoc = leftUpPos
            correctAns = 'f'
        elif Position1[0] == 'leftDownPos':
            targLoc = leftDownPos
            correctAns = 'v'
        elif Position1[0] == 'rightUpPos':
            targLoc = rightUpPos
            correctAns = 'j'
        elif Position1[0] == 'rightDownPos':
            targLoc = rightDownPos
            correctAns = 'n'
    PolygonComponent fixpoint_3
      fillColor = $[-1.000,-1.000,-1.000]
      lineWidth = 0
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent sub_cue_3
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $targLoc
      shape = regular polygon...
      size = [2, 2]
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.2
      units = deg
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    PolygonComponent mask1_5
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos = [3, 3]
      shape = regular polygon...
      size = [2, 2]
      startVal [condition] = $sub_cue_3.status==FINISHED
      stopVal [duration (s)] = 0.033
      units = deg
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    PolygonComponent mask2_5
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos = [3,-3]
      shape = regular polygon...
      size = [2, 2]
      startVal [frame N] = $sub_cue_3.status==FINISHED
      stopVal [duration (s)] = 0.033
      units = deg
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    PolygonComponent mask2_6
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos = [-3,3]
      shape = regular polygon...
      size = [2, 2]
      startVal [frame N] = $sub_cue_3.status==FINISHED
      stopVal [duration (s)] = 0.033
      units = deg
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    PolygonComponent mask2_7
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos = [-3,-3]
      shape = regular polygon...
      size = [2, 2]
      startVal [frame N] = $sub_cue_3.status==FINISHED
      stopVal [duration (s)] = 0.033
      units = deg
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    KeyboardComponent key_resp_10
      allowedKeys = 'f','v','j','n'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = $mask1_5.status == FINISHED
      storeCorrect = True
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  Routine instruction_3
    ImageComponent image_3
      image = inst2.png
      size = (40,24)
      startVal [time (s)] = 0.0
      units = deg
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_13
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine instruction_4
    ImageComponent image_4
      image = inst2_1.png
      size = (40,24)
      startVal [time (s)] = 0.0
      units = deg
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine color_tut
    CodeComponent code_6
      Code Type = Py
      Begin Experiment:
        SubPos = [0,0]
        Dist1Pos=[0,0]
        Dist2Pos=[0,0]
        Dist3Pos=[0,0]
        TargHolePos=[0,0]
        DistHole1Pos=[0,0]
        DistHole2Pos=[0,0]
        DistHole3Pos=[0,0]
        TargColor = ''
        Dist1Color = ''
        Dist2Color = ''
        Dist3Color = ''



        #color distribution
        color1 = [0.919328101270864,0.562714754347291,0.677880544326632] #pink
        color2 = [0.738273479967632,0.665884513139248,0.394944342687036] #blue
        color3 = [0.285277976226026,0.744574124644093,0.664931204138875] #yellow
        color4 = [0.532436017960231,0.678950350974952,0.941414538047463] #green

        leftUpPos = [-3, 3]
        leftDownPos = [-3, -3]
        rightUpPos = [3, 3]
        rightDownPos = [3, -3]

        def holeup(pos):
            pos1 = [0, 0]
            pos1[0] = pos[0]
            pos1[1] = pos[1]+0.5
            return pos1

        def holedown(pos):
            pos1 = [0, 0]
            pos1[0] = pos[0]
            pos1[1] = pos[1]-0.5
            return pos1

        def holeleft(pos):
            pos1 = [0,0]
            pos1[1] = pos[1]
            pos1[0] = pos[0] - 0.5
            return pos1


        def holeright(pos):
            pos1 = [0, 0]
            pos1[1] = pos[1]
            pos1[0] = pos[0] + 0.5
            return pos1
      Begin Routine:
        import numpy as np
        from numpy.random import random


        #---------------------------------position---------
        if cue1 == 'Valid':
            SubPos = TargPos1
        elif cue1 == 'Invalid':
            SubPos = Dist1Pos

        if TargPos1 == [-3,3]:
            posLists = [leftDownPos, rightUpPos, rightDownPos]
            Pos = ['leftDownPos', 'rightUpPos', 'rightDownPos']
            StartIdx =  np.random.choice(Pos, 3, p=[0.34, 0.33, 0.33], replace = False)
            StartPos = []
            for idx in StartIdx:
                StartPos.append(posLists[Pos.index(idx)])
            Dist1Pos = StartPos[0]
            Dist2Pos = StartPos[1]
            Dist3Pos = StartPos[2]
            if random()>0.5:
                TargHolePos = holeleft(TargPos1)
                np.random.shuffle(StartPos)
                DistHole1Pos = holedown(StartPos[0])
                DistHole2Pos = holeright(StartPos[1])
                DistHole3Pos = holeup(StartPos[2])
                corrAns = 'left'
            else:
                TargHolePos = holeright(TargPos1)
                np.random.shuffle(StartPos)
                DistHole1Pos = holedown(StartPos[0])
                DistHole2Pos = holeleft(StartPos[1])
                DistHole3Pos = holeup(StartPos[2])
                corrAns = 'right'

        elif TargPos1 == [-3,-3]:
            posLists = [leftUpPos, rightUpPos, rightDownPos]
            Pos = ['leftUpPos', 'rightUpPos', 'rightDownPos']
            StartIdx =  np.random.choice(Pos, 3, p=[0.34, 0.33, 0.33], replace = False)
            StartPos = []
            for idx in StartIdx:
                StartPos.append(posLists[Pos.index(idx)])
            Dist1Pos = StartPos[0]
            Dist2Pos = StartPos[1]
            Dist3Pos = StartPos[2]
            if random()>0.5:
                TargHolePos = holeleft(TargPos1)
                np.random.shuffle(StartPos)
                DistHole1Pos = holedown(StartPos[0])
                DistHole2Pos = holeright(StartPos[1])
                DistHole3Pos = holeup(StartPos[2])
                corrAns = 'left'
            else:
                TargHolePos = holeright(TargPos1)
                np.random.shuffle(StartPos)
                DistHole1Pos = holedown(StartPos[0])
                DistHole2Pos = holeleft(StartPos[1])
                DistHole3Pos = holeup(StartPos[2])
                corrAns = 'right'


        elif TargPos1 == [3,3]:
            posLists = [leftUpPos, leftDownPos, rightDownPos]
            Pos = ['leftUpPos', 'leftDownPos', 'rightDownPos']
            StartIdx =  np.random.choice(Pos, 3, p=[0.34, 0.33, 0.33], replace = False)
            StartPos = []
            for idx in StartIdx:
                StartPos.append(posLists[Pos.index(idx)])
            Dist1Pos = StartPos[0]
            Dist2Pos = StartPos[1]
            Dist3Pos = StartPos[2]
            if random()>0.5:
                TargHolePos = holeleft(TargPos1)
                np.random.shuffle(StartPos)
                DistHole1Pos = holedown(StartPos[0])
                DistHole2Pos = holeright(StartPos[1])
                DistHole3Pos = holeup(StartPos[2])
                corrAns = 'left'
            else:
                TargHolePos = holeright(TargPos1)
                np.random.shuffle(StartPos)
                DistHole1Pos = holedown(StartPos[0])
                DistHole2Pos = holeleft(StartPos[1])
                DistHole3Pos = holeup(StartPos[2])
                corrAns = 'right'

        elif TargPos1 == [3,-3]:
            posLists = [leftUpPos, leftDownPos, rightUpPos]
            Pos = ['leftDownPos', 'rightUpPos', 'leftUpPos']
            StartIdx =  np.random.choice(Pos, 3, p=[0.34, 0.33, 0.33], replace = False)
            StartPos = []
            for idx in StartIdx:
                StartPos.append(posLists[Pos.index(idx)])
            Dist1Pos = StartPos[0]
            Dist2Pos = StartPos[1]
            Dist3Pos = StartPos[2]
            if random()>0.5:
                TargHolePos = holeleft(TargPos1)
                np.random.shuffle(StartPos)
                DistHole1Pos = holedown(StartPos[0])
                DistHole2Pos = holeright(StartPos[1])
                DistHole3Pos = holeup(StartPos[2])
                corrAns = 'left'
            else:
                TargHolePos = holeright(TargPos1)
                np.random.shuffle(StartPos)
                DistHole1Pos = holedown(StartPos[0])
                DistHole2Pos = holeleft(StartPos[1])
                DistHole3Pos = holeup(StartPos[2])
                corrAns = 'right'

        #-----------------color-------------------------------------------------------------#

        if TargColor1 == 'color1': #if target color is color1
            #distribute color randomly
        #    colorLists = [color2, color3, color4]
        #    color = ['color2', 'color3', 'color4']
        #    colorIdx = np.random.choice(color, 3, p=[0.34, 0.33, 0.33], replace = False)
        #    colorPos = []
        #    for idx in colorIdx:
        #        colorPos.append(colorLists[color.index(idx)])
            TargColor1 = color1
            Dist1Color = color2
            Dist2Color = color3
            Dist3Color = color4

        elif TargColor1 == 'color2': #if target color is color 2
            #distribute color randomly
         #   colorLists = [color1, color3, color4]
         #   color = ['color1', 'color3', 'color4']
         #   colorIdx = np.random.choice(color, 3, p=[0.34, 0.33, 0.33], replace = False)
         #   colorPos = []
         #   for idx in colorIdx:
          #      colorPos.append(colorLists[color.index(idx)])
            TargColor1 = color2
            Dist1Color = color1
            Dist2Color = color3
            Dist3Color = color4

        elif TargColor1 == 'color3':
            TargColor1 = color3
            Dist1Color = color1
            Dist2Color = color2
            Dist3Color = color4

        elif TargColor1 == 'color4':
            TargColor1 = color4
            Dist1Color = color1
            Dist2Color = color2
            Dist3Color = color3

        #---------------------------hole-------------------------
    PolygonComponent polygon_3
      fillColor = $[-1.000,-1.000,-1.000]
      lineWidth = 0
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent target_red_2
      fillColor [set every repeat] = $TargColor1
      lineWidth = 0
      nVertices = 90
      shape = regular polygon...
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = deg
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    PolygonComponent sub_cue_4
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $SubPos
      shape = regular polygon...
      size = (2,2)
      startVal [time (s)] = 1.0
      stopVal [duration (frames)] = 2
      units = deg
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    PolygonComponent mask1_6
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos = (-3,-3)
      shape = regular polygon...
      size = (2,2)
      startVal [condition] = $sub_cue_4.status == FINISHED
      stopVal [duration (s)] = 0.033
      units = deg
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    PolygonComponent mask2_8
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos = (-3, 3)
      shape = regular polygon...
      size = (2,2)
      startVal [condition] = $sub_cue_4.status == FINISHED
      stopVal [duration (s)] = 0.033
      units = deg
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    PolygonComponent mask1_7
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos = (3,-3)
      shape = regular polygon...
      size = (2,2)
      startVal [condition] = $sub_cue_4.status == FINISHED
      stopVal [duration (s)] = 0.033
      units = deg
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    PolygonComponent mask1_8
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos = (3,3)
      shape = regular polygon...
      size = (2,2)
      startVal [condition] = $sub_cue_4.status == FINISHED
      stopVal [duration (s)] = 0.033
      units = deg
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    PolygonComponent circle1
      fillColor [set every repeat] = $TargColor1
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $TargPos1
      shape = regular polygon...
      size = (2,2)
      startVal [condition] = $mask1_6.status == FINISHED
      stopVal [duration (s)] = 0.2
      units = deg
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    PolygonComponent circle2
      fillColor [set every repeat] = $Dist1Color
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $Dist1Pos
      shape = regular polygon...
      size = (2,2)
      startVal [condition] = $mask1_6.status == FINISHED
      stopVal [duration (s)] = 0.2
      units = deg
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    PolygonComponent circle3
      fillColor [set every repeat] = $Dist2Color
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $Dist2Pos
      shape = regular polygon...
      size = (2,2)
      startVal [condition] = $mask1_6.status == FINISHED
      stopVal [duration (s)] = 0.2
      units = deg
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    PolygonComponent circle4
      fillColor [set every repeat] = $Dist3Color
      lineColor [set every repeat] = $Dist3Color
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $Dist3Pos
      shape = regular polygon...
      size = (2,2)
      startVal [condition] = $mask1_6.status == FINISHED
      stopVal [duration (s)] = 0.2
      units = deg
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    PolygonComponent hole
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $TargHolePos
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [condition] = $mask1_6.status == FINISHED
      stopVal [duration (s)] = 0.2
      units = deg
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    PolygonComponent hole_3
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $DistHole1Pos
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [condition] = $mask1_6.status == FINISHED
      stopVal [duration (s)] = 0.2
      units = deg
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    PolygonComponent hole3_2
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $DistHole2Pos
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [condition] = $mask1_6.status == FINISHED
      stopVal [duration (s)] = 0.2
      units = deg
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    PolygonComponent hole_5
      fillColor = $[0.506,0.506,0.506]
      lineWidth = 0
      nVertices = 90
      pos [set every repeat] = $DistHole3Pos
      shape = regular polygon...
      size = (0.6, 0.6)
      startVal [condition] = $mask1_6.status == FINISHED
      stopVal [duration (s)] = 0.2
      units = deg
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    KeyboardComponent key_resp_4
      allowedKeys = 'right', 'left'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [condition] = $circle1.status == FINISHED
      storeCorrect = True
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  Routine feedback_color_2
    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        if key_resp_4.corr:
            msg = '정답!'
        else :
            msg = '오답'
    TextComponent feedback
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
      text [set every repeat] = $msg
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  Routine eye_fixation_2
    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        win.mouseVisible = True
        mousePos1 = mouse_2.getPos()
      Each Frame:
        if polygon_8.contains(mouse_2):
            core.wait(0.1)
            continueRoutine = False
      End Routine:
        win.mouseVisible = False
    PolygonComponent polygon_4
      fillColor = $[-1.000,-1.000,-1.000]
      lineWidth = 0
      shape = cross
      size = (1,1)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent polygon_8
      fillColor = $[0.004,0.004,0.004]
      lineWidth = 0
      nVertices = 90
      opacity = 0
      shape = regular polygon...
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = deg
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    MouseComponent mouse_2
      clickable = polygon
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction_1
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine start
    Routine staircase_tutorial
  LoopTerminator trials_4
  Routine instruction_2
  LoopInitiator trials_3 loopType="StairHandler"
    N down = 3
    N reversals = 10
    N up = 1
    loopType = staircase
    max value = 120
    min value = 1
    nReps = 120
    start value = 100
    step sizes = [8,4,2,2,1]
    step type = lin
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    Routine start
    Routine staircase
  LoopTerminator trials_3
  Routine instruction_3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = tutorial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('TargPos1', [-3, 3]), ('TargColor1', 'color1'), ('cue1', 'Valid')]),
      OrderedDict([('TargPos1', [-3, -3]), ('TargColor1', 'color4'), ('cue1', 'Valid')]),
      OrderedDict([('TargPos1', [3, 3]), ('TargColor1', 'color3'), ('cue1', 'Valid')]),
      OrderedDict([('TargPos1', [3, -3]), ('TargColor1', 'color4'), ('cue1', 'Valid')]),
      OrderedDict([('TargPos1', [-3, 3]), ('TargColor1', 'color1'), ('cue1', 'Valid')]),
      OrderedDict([('TargPos1', [-3, -3]), ('TargColor1', 'color3'), ('cue1', 'Valid')]),
      OrderedDict([('TargPos1', [3, -3]), ('TargColor1', 'color1'), ('cue1', 'Valid')]),
      OrderedDict([('TargPos1', [3, -3]), ('TargColor1', 'color2'), ('cue1', 'Valid')]),
      OrderedDict([('TargPos1', [3, -3]), ('TargColor1', 'color3'), ('cue1', 'Valid')]),
      OrderedDict([('TargPos1', [3, -3]), ('TargColor1', 'color4'), ('cue1', 'Valid')])]
    Routine eye_fixation_2
    Routine color_tut
    Routine feedback_color_2
  LoopTerminator trials
  Routine instruction_4
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = 10
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    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = cue_condition0630.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('TargPos', [-3, 3]), ('TargColor', 'color1'), ('cue', 'Valid')]),
        OrderedDict([('TargPos', [-3, 3]), ('TargColor', 'color2'), ('cue', 'Valid')]),
        OrderedDict([('TargPos', [-3, 3]), ('TargColor', 'color3'), ('cue', 'Valid')]),
        OrderedDict([('TargPos', [-3, 3]), ('TargColor', 'color4'), ('cue', 'Valid')]),
        OrderedDict([('TargPos', [-3, -3]), ('TargColor', 'color1'), ('cue', 'Valid')]),
        OrderedDict([('TargPos', [-3, -3]), ('TargColor', 'color2'), ('cue', 'Valid')]),
        OrderedDict([('TargPos', [-3, -3]), ('TargColor', 'color3'), ('cue', 'Valid')]),
        OrderedDict([('TargPos', [-3, -3]), ('TargColor', 'color4'), ('cue', 'Valid')]),
        OrderedDict([('TargPos', [3, 3]), ('TargColor', 'color1'), ('cue', 'Valid')]),
        OrderedDict([('TargPos', [3, 3]), ('TargColor', 'color2'), ('cue', 'Valid')]),
        OrderedDict([('TargPos', [3, 3]), ('TargColor', 'color3'), ('cue', 'Valid')]),
        OrderedDict([('TargPos', [3, 3]), ('TargColor', 'color4'), ('cue', 'Valid')]),
        OrderedDict([('TargPos', [3, -3]), ('TargColor', 'color1'), ('cue', 'Valid')]),
        OrderedDict([('TargPos', [3, -3]), ('TargColor', 'color2'), ('cue', 'Valid')]),
        OrderedDict([('TargPos', [3, -3]), ('TargColor', 'color3'), ('cue', 'Valid')]),
        OrderedDict([('TargPos', [3, -3]), ('TargColor', 'color4'), ('cue', 'Valid')]),
        OrderedDict([('TargPos', [-3, 3]), ('TargColor', 'color1'), ('cue', 'Valid')]),
        OrderedDict([('TargPos', [-3, 3]), ('TargColor', 'color2'), ('cue', 'Valid')]),
        OrderedDict([('TargPos', [-3, 3]), ('TargColor', 'color3'), ('cue', 'Valid')])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
      Routine eye_fixation
      Routine color
      Routine feedback_color
    LoopTerminator trials_2
    Routine break_2
  LoopTerminator block
  Routine thanks
