PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = default
  Save log file = False
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = movie_final_2
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        opacity = 0.15
        cue = 0.008

        #right
        loc1 = [16, 2.7]
        loc2 = [8, 2.7]
        loc3 = [16, 8.1]
        loc4 = [8, 8.1]
        loc5 = [16, -2.7]
        loc6 = [8, -2.7]
        loc7 = [16, -8.1]
        loc8 = [8, -8.1]
        #left
        loc9 = [-16, 2.7]
        loc10 = [-8, 2.7]
        loc11 = [-16, 8.1]
        loc12 = [-8, 8.1]
        loc13 = [-16, -2.7]
        loc14 = [-8, -2.7]
        loc15 = [-16, -8.1]
        loc16 = [-8, -8.1]

        #time
        timeset = [1, 2, 3, 4, 5, 0.5, 1.5, 2.5, 3.5, 4.5]

        #condition
        side = [0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1]
        #side = [0,0,0,0,0,0,0,0,0,0,0,0,0,1,1,1,1,1,1,1,1,1,1]
        #side = [0,0,1,1,1,1]
        random.shuffle(side) #같은 비율 유지
        right_loc = [loc1, loc2, loc3, loc4, loc5, loc6, loc7, loc8]
        left_loc = [loc9, loc10, loc11, loc12, loc13, loc14, loc15, loc16]
      Begin Routine:
        thisExp.addData('movie_time', time.time())
        thisExp.addData('movie_tick', cv2.getTickCount())
        random.shuffle(left_loc)
        random.shuffle(right_loc)
        random.shuffle(timeset)

        starttime = 0
        num = trials.thisN
        side_rec = ''
        if side[num] == 0: #left 80%, right 20%
            pos1 = left_loc[0]
            pos2 = left_loc[1]
            pos3 = left_loc[2]
            pos4 = left_loc[3]
            pos5 = left_loc[4]
            pos6 = left_loc[5]
            pos7 = left_loc[6]
            pos8 = left_loc[7]
            pos9 = right_loc[0]
            pos10 = right_loc[1]
            #record side
            side_rec = 'left'
            thisExp.addData('side', side_rec)


        elif side[num] == 1:  #left 20%, right 80%
            pos1 = right_loc[0]
            pos2 = right_loc[1]
            pos3 = right_loc[2]
            pos4 = right_loc[3]
            pos5 = right_loc[4]
            pos6 = right_loc[5]
            pos7 = right_loc[6]
            pos8 = right_loc[7]
            pos9 = left_loc[0]
            pos10 = left_loc[1]

            #record side
            side_rec = 'right'
            thisExp.addData('side', side_rec)

        #time
        t1 = starttime + timeset[0]
        t2 = t1 + timeset[1]
        t3 = t2 + timeset[2]
        t4 = t3 + timeset[3]
        t5 = t4 + timeset[4]
        t6 = t5 + timeset[5]
        t7 = t6 + timeset[6]
        t8 = t7 + timeset[7]
        t9 = t8 + timeset[8]
        t10 = t9 + timeset[9]

        timeorder = [t1, t2, t3, t4, t5, t6, t7, t8, t9, t10]

        shuffle(timeorder)

        time1 = timeorder[0]
        time2 = timeorder[1]
        time3 = timeorder[2]
        time4 = timeorder[3]
        time5 = timeorder[4]
        time6 = timeorder[5]
        time7 = timeorder[6]
        time8 = timeorder[7]
        time9 = timeorder[8]
        time10 = timeorder[9]


        #add data position of cue
        thisExp.addData('pos1', pos1)
        thisExp.addData('pos2', pos2)
        thisExp.addData('pos3', pos3)
        thisExp.addData('pos4', pos4)
        thisExp.addData('pos5', pos5)
        thisExp.addData('pos6', pos6)
        thisExp.addData('pos7', pos7)
        thisExp.addData('pos8', pos8)
        thisExp.addData('pos9', pos9)
        thisExp.addData('pos10', pos10)
      Each Frame:
        #add data time of cue
        if cue1.status == STARTED:
            thisExp.addData('cue1_time', cv2.getTickCount())
        if cue2.status == STARTED:
            thisExp.addData('cue2_time', cv2.getTickCount())
        if cue3.status == STARTED:
            thisExp.addData('cue3_time', cv2.getTickCount())
        if cue4.status == STARTED:
            thisExp.addData('cue4_time', cv2.getTickCount())
        if cue5.status == STARTED:
            thisExp.addData('cue5_time', cv2.getTickCount())
        if cue6.status == STARTED:
            thisExp.addData('cue6_time', cv2.getTickCount())
        if cue7.status == STARTED:
            thisExp.addData('cue7_time', cv2.getTickCount())
        if cue8.status == STARTED:
            thisExp.addData('cue8_time', cv2.getTickCount())
        if cue9.status == STARTED:
            thisExp.addData('cue9_time', cv2.getTickCount())
        if cue10.status == STARTED:
            thisExp.addData('cue10_time', cv2.getTickCount())

        if cue1.status == FINISHED:
            thisExp.addData('cue1_end', cv2.getTickCount())
        if cue2.status == FINISHED:
            thisExp.addData('cue2_end', cv2.getTickCount())
        if cue3.status == FINISHED:
            thisExp.addData('cue3_end', cv2.getTickCount())
        if cue4.status == FINISHED:
            thisExp.addData('cue4_end', cv2.getTickCount())
        if cue5.status == FINISHED:
            thisExp.addData('cue5_end', cv2.getTickCount())
        if cue6.status == FINISHED:
            thisExp.addData('cue6_end', cv2.getTickCount())
        if cue7.status == FINISHED:
            thisExp.addData('cue7_end', cv2.getTickCount())
        if cue8.status == FINISHED:
            thisExp.addData('cue8_end', cv2.getTickCount())
        if cue9.status == FINISHED:
            thisExp.addData('cue9_end', cv2.getTickCount())
        if cue10.status == FINISHED:
            thisExp.addData('cue10_end', cv2.getTickCount())

        if cue1_2.status == STARTED:
            thisExp.addData('cue1_2', cv2.getTickCount())
        if cue2_2.status == STARTED:
            thisExp.addData('cue2_2', cv2.getTickCount())
        if cue3_2.status == STARTED:
            thisExp.addData('cue3_2', cv2.getTickCount())
        if cue4_2.status == STARTED:
            thisExp.addData('cue4_2', cv2.getTickCount())
        if cue5_2.status == STARTED:
            thisExp.addData('cue5_2', cv2.getTickCount())
        if cue6_2.status == STARTED:
            thisExp.addData('cue6_2', cv2.getTickCount())
        if cue7_2.status == STARTED:
            thisExp.addData('cue7_2', cv2.getTickCount())
        if cue8_2.status == STARTED:
            thisExp.addData('cue8_2', cv2.getTickCount())
        if cue9_2.status == STARTED:
            thisExp.addData('cue9_2', cv2.getTickCount())
        if cue10_2.status == STARTED:
            thisExp.addData('cue10_2', cv2.getTickCount())

        if cue1_2.status == FINISHED:
            thisExp.addData('cue1_2_end', cv2.getTickCount())
        if cue2_2.status == FINISHED:
            thisExp.addData('cue2_2_end', cv2.getTickCount())
        if cue3_2.status == FINISHED:
            thisExp.addData('cue3_2_end', cv2.getTickCount())
        if cue4_2.status == FINISHED:
            thisExp.addData('cue4_2_end', cv2.getTickCount())
        if cue5_2.status == FINISHED:
            thisExp.addData('cue5_2_end', cv2.getTickCount())
        if cue6_2.status == FINISHED:
            thisExp.addData('cue6_2_end', cv2.getTickCount())
        if cue7_2.status == FINISHED:
            thisExp.addData('cue7_2_end', cv2.getTickCount())
        if cue8_2.status == FINISHED:
            thisExp.addData('cue8_2_end', cv2.getTickCount())
        if cue9_2.status == FINISHED:
            thisExp.addData('cue9_2_end', cv2.getTickCount())
        if cue10_2.status == FINISHED:
            thisExp.addData('cue10_2_end', cv2.getTickCount())
      End Routine:
        thisExp.addData('movie_endtime', cv2.getTickCount())
    MovieComponent movie
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $video
      size = [48,27]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      units = deg
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    ImageComponent cue1
      image = cue_1.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos1
      size = (1,1)
      startVal [time (s)] = $time1
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue2
      image = cue_1.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos2
      size = (1,1)
      startVal [time (s)] = $time2
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue3
      image = cue_1.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos3
      size = (1,1)
      startVal [time (s)] = $time3
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue4
      image = cue_1.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos4
      size = (1,1)
      startVal [time (s)] = $time4
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue5
      image = cue_1.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos5
      size = (1,1)
      startVal [time (s)] = $time5
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue6
      image = cue_1.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos6
      size = (1,1)
      startVal [time (s)] = $time6
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue7
      image = cue_1.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos7
      size = (1,1)
      startVal [time (s)] = $time7
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue8
      image = cue_1.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos8
      size = (1,1)
      startVal [time (s)] = $time8
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue9
      image = cue_1.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos9
      size = (1,1)
      startVal [time (s)] = $time9
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue10
      image = cue_1.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos10
      size = (1,1)
      startVal [time (s)] = $time10
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue1_2
      image = cue.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos1
      size = (1,1)
      startVal [condition] = $cue1.status == FINISHED
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue2_2
      image = cue.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos2
      size = (1,1)
      startVal [condition] = $cue2.status == FINISHED
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue3_2
      image = cue.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos3
      size = (1,1)
      startVal [condition] = $cue3.status == FINISHED
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue4_2
      image = cue.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos4
      size = (1,1)
      startVal [condition] = $cue4.status == FINISHED
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue5_2
      image = cue.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos5
      size = (1,1)
      startVal [condition] = $cue5.status == FINISHED
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue6_2
      image = cue.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos6
      size = (1,1)
      startVal [condition] = $cue6.status == FINISHED
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue7_2
      image = cue.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos7
      size = (1,1)
      startVal [condition] = $cue7.status == FINISHED
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue8_2
      image = cue.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos8
      size = (1,1)
      startVal [condition] = $cue8.status == FINISHED
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue9_2
      image = cue.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos9
      size = (1,1)
      startVal [condition] = $cue9.status == FINISHED
      stopVal [duration (s)] = $cue
      units = deg
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    ImageComponent cue10_2
      image = cue.png
      opacity [set every repeat] = opacity
      pos [set every repeat] = pos10
      size = (1,1)
      startVal [condition] = $cue10.status == FINISHED
      stopVal [duration (s)] = $cue
      units = deg
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  Routine focus
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        import time
        import random
        import cv2


        thisExp.addData('exp_time', time.time())
        thisExp.addData('exp_tick', cv2.getTickCount())
      Begin Routine:
        thisExp.addData('focus_tick', cv2.getTickCount())
    PolygonComponent polygon
      fillColor = $[-1.000,-1.000,-1.000]
      lineWidth = 0
      shape = cross
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = deg
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  Routine break_2
    TextComponent text
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        우측 방향키(→)를 눌러서 영상을 시작해주세요.
        Press right key (→) to play the video.

        다음에 나오는 +에 시선을 집중시켰다가, 영상이 시작되면 자유롭게 시청을 해주세요.
        Please focus first on the + that will follow. When the video starts, you can watch it freely.
    KeyboardComponent key_resp
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inst
    TextComponent text_2
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        앞으로 30개의 영상들을 보게 됩니다.
        You will be watching 30 videos.

        고개가 최대한 움직이지 않게 시청을 해주시기 바랍니다.
        Please try not to move your head during the experiment.

        답변은 모두 키보드로 해주시면 됩니다.
        All the questions are answered using the keyboard.

        우측 방향키(→)를 눌러서 시작해주세요.
        Press right key to proceed.
    KeyboardComponent key_resp_2
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent text_3
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        수고하셨습니다 :)

        실험의 다음 단계 안내를 기다려주세요
  Routine noise
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        thisExp.addData('noise_time', time.time())
        thisExp.addData('noise_tick', cv2.getTickCount())
    NoiseStimComponent noise_2
      color = $[-1.000,-1.000,-1.000]
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.1
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      sf = None
      size = [48,27]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      texture resolution = 64
      units = deg
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Flow
  Routine inst
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = new_condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('video', 'v1.mp4'), ('category', 'scene')]),
      OrderedDict([('video', 'v2.mp4'), ('category', 'scene')]),
      OrderedDict([('video', 'v3.mp4'), ('category', 'scene')]),
      OrderedDict([('video', 'v4.mp4'), ('category', 'scene')]),
      OrderedDict([('video', 'v5.mp4'), ('category', 'scene')]),
      OrderedDict([('video', 'v6.mp4'), ('category', 'scene')]),
      OrderedDict([('video', 'v7.mp4'), ('category', 'scene')]),
      OrderedDict([('video', 'v8.mp4'), ('category', 'scene')]),
      OrderedDict([('video', 'v9.mp4'), ('category', 'scene')]),
      OrderedDict([('video', 'v10.mp4'), ('category', 'scene')]),
      OrderedDict([('video', 'v11.mp4'), ('category', 'scene')]),
      OrderedDict([('video', 'v12.mp4'), ('category', 'scene')]),
      OrderedDict([('video', 'v13.mp4'), ('category', 'scene')]),
      OrderedDict([('video', 'v14.mp4'), ('category', 'scene')]),
      OrderedDict([('video', 'v15.mp4'), ('category', 'scene')]),
      OrderedDict([('video', 'v16.mp4'), ('category', 'people')]),
      OrderedDict([('video', 'v17.mp4'), ('category', 'people')]),
      OrderedDict([('video', 'v18.mp4'), ('category', 'people')]),
      OrderedDict([('video', 'v19.mp4'), ('category', 'people')]),
      OrderedDict([('video', 'v20.mp4'), ('category', 'people')]),
      OrderedDict([('video', 'v21.mp4'), ('category', 'people')]),
      OrderedDict([('video', 'v22.mp4'), ('category', 'people')]),
      OrderedDict([('video', 'v23.mp4'), ('category', 'people')]),
      OrderedDict([('video', 'v24.mp4'), ('category', 'people')]),
      OrderedDict([('video', 'v25.mp4'), ('category', 'people')])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
    Routine break_2
    Routine focus
    Routine trial
    Routine noise
  LoopTerminator trials
  Routine thanks
